PsychoPy2experiment version="2022.2.4"
Settings
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = exp
  keyboardBackend = ioHub
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Routines
  Routine welcome
    TextComponent welcome_text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome to the study.

        In this study, you'll finish two similar but different experiments. You'll receive instructions and do a couple of practice trials before the real experiments begin.

        Between the two experiments you'll have time to take a 5-minute break. During the experiment, if you need to pause or stop, please raise you hand so the researcher can assist you.

        Press space to continue.
    KeyboardComponent end_welcome
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
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  Routine exp1_instr
    TextComponent insturction_1
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        This is insturction for experiment 1.

        In this experiment you will see two image items on the screen while listening a sentence. The sentence you hear can be English, Spanish or a mix of both. Each sentence will mention one and only one of the two items. When you hear the image item being mentioned, please press the corresponding left/right shift key on keyboard.

        Before the experiment starts, let's do a couple of practice trials.

        Press space to start practice trial.
    KeyboardComponent end_instr
      allowedKeys = 'space'
      discard previous = False
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
      syncScreenRefresh = False
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  Routine exp1_trial
    ImageComponent exp1_trial_image
      anchor = center-left
      image [set every repeat] = $image
      saveStartStop = False
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent exp1_trial_sound
      sound = $num
      startVal [time (s)] = 1.0
      stopVal [duration (s)] = 5
      syncScreenRefresh = False
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    KeyboardComponent key_resp
      allowedKeys = 'left-shift','right-shift'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      store = all keys
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    ImageComponent exp1_trial_image__alt
      image = $image_alt
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine exp1_start
  Routine end_exp1_trial
  Routine exp1
  Routine exp1_end
Flow
  Routine welcome
  Routine exp1_instr
  LoopInitiator exp1_trial_loop loopType="TrialHandler"
    conditionsFile = /Users/gabmac/Documents/RU/QP/exp/trial/trial.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'NOTE': 'trial', 'list': 'lt', 'cond': 'tr', 'lang': 'en', 'type': 'na', 'num': 'tr1', 'phr': 'Where are your kids?', 'sent_code': 'lt_tr_en_na_tr1', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'image': 'kids', 'image_alt': 'key'},
      {'NOTE': None, 'list': 'lt', 'cond': 'tr', 'lang': 'en', 'type': 'na', 'num': 'tr2', 'phr': 'Who is buying my car?', 'sent_code': 'lt_tr_en_na_tr2', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'image': 'car', 'image_alt': 'bag'},
      {'NOTE': None, 'list': 'lt', 'cond': 'tr', 'lang': 'sp', 'type': 'na', 'num': 'tr3', 'phr': '¿Dónde está mi perro?', 'sent_code': 'lt_tr_sp_na_tr3', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'image': 'dog', 'image_alt': 'backpack'},
      {'NOTE': None, 'list': 'lt', 'cond': 'tr', 'lang': 'sp', 'type': 'na', 'num': 'tr4', 'phr': '¿De quién es la bolsa?', 'sent_code': 'lt_tr_sp_na_tr4', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'image': 'bag', 'image_alt': 'flower'},
      {'NOTE': None, 'list': 'lt', 'cond': 'tr', 'lang': 'se', 'type': 'na', 'num': 'tr5', 'phr': '¿Dónde encontraste sus donuts?', 'sent_code': 'lt_tr_se_na_tr5', 'mat': '-', 'mat_num': '-', 'emb_num': '-', 'emb': '-', 'cut': '-', 'mat_f0_c': '-', 'image': 'donuts', 'image_alt': 'plates'}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
    Routine exp1_trial
  LoopTerminator exp1_trial_loop
  Routine end_exp1_trial
  Routine exp1_start
  LoopInitiator exp1_loop loopType="TrialHandler"
    loopType = random
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    Routine exp1
  LoopTerminator exp1_loop
  Routine exp1_end
